PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Pre_EXP
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Intro
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    CodeComponent Total_code
      Code Type = Auto->JS
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      Before Experiment:
        #存储变量
        Punish_storage = 0 #惩罚待机

        Choice_Final = 0
        A = "k"
        Rank_1 = 0
        Rank_2 = 0
        Rank_3 = 0
        Punish_Final = "k"
      Begin Experiment:
        Punish_storage = 0 #惩罚待机
  Routine Game_3
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    CodeComponent code_in_Practice
      Code Type = Auto->JS
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      Begin Routine:
        # 读取 5 个箭头和对应的正确按键
        arrow_list = [arrow1, arrow2, arrow3, arrow4, arrow5, arrow_black]
        correct_keys = [key1, key2, key3, key4, key5, "space"]
        Choice_Final = 0
        current_arrow = 0  # 当前箭头索引
        reaction_times = []  # 记录反应时间
        trial_start_time = globalClock.getTime()  # 记录 trial 开始时间
        waiting_for_end = False  # 是否进入等待模式
        arrowStim.image = arrow_list[current_arrow]  # 显示第一个箭头
        continueRoutine = True
        back_color = 'blue'
        back_color_num = 0
        #读取列表
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        print(Rank_list[Block_stage])
        Rank = int(Rank_list[Block_stage])
        if Rank == 0 :
            continueRoutine = False
      Each Frame:
        # 计算当前试次已经运行的时间
        current_time = globalClock.getTime()
        elapsed_time = current_time - trial_start_time

        # 监听键盘输入
        keys = resp.getKeys()
        if keys and not waiting_for_end:
            key = keys[0]  # 获取第一个按键
            rt = keys[0].rt  # 记录反应时间

            # 检查按键是否正确
            if key.name == correct_keys[current_arrow]:
                reaction_times.append(rt)  # 记录反应时间
                current_arrow += 1  # 进入下一个箭头
                back_color_num += 1
                if back_color_num % 2 == 1:
                    back_color = 'green'
                else:
                    back_color = 'blue'

                # 如果 5 个箭头完成，进入等待模式
                if current_arrow >= len(arrow_list)-1:
                    waiting_for_end = True  # 进入等待模式
                    current_arrow = 5
                    waiting_start_time = globalClock.getTime()  # 记录等待时间
                    arrowStim.image = "Black.png"  # 隐藏箭头
                else:
                    # 继续显示下一个箭头
                    arrowStim.image = arrow_list[current_arrow]

        # 如果 4 秒到了，不管有没有完成 5 个箭头，直接终止
        if elapsed_time >= 4:
            continueRoutine = False

        # 进入等待模式，保持 Routine 直到 4 秒
        if waiting_for_end:
            if globalClock.getTime() - trial_start_time >= 4:
                continueRoutine = False  # 结束 routine
      End Routine:
        # 记录数据
        thisExp.addData("ReactionTimes", reaction_times)
        thisExp.addData("TotalArrowsReacted", current_arrow)
        thisExp.addData("TrialDuration", 4)
    PolygonComponent backkground
      fillColor [set every frame] = $back_color
      shape = rectangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    ImageComponent arrowStim
      image [set every frame] = $arrow_list[current_arrow]
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    KeyboardComponent resp
      allowedKeys = "j","f"
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = all keys
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  Routine Message_1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #读取列表
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        Rank = int(Rank_list[Block_stage])

        if Rank == 0 :
            continueRoutine = False

        #确定是否有信息
        if Block_stage == 1 and Rank == 2:
            Message_champion = "優勝者送信: \n三位のコインを壊して下さい\nそうしないと、あなたのコインを壊す　"
        else:
            Message_champion = "受信なし"
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $Message_champion
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  Routine Choice
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        #读取列表
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        Rank = int(Rank_list[Block_stage])

        reaction_times = []  # 记录反应时间
        trial_start_time = globalClock.getTime()  # 记录 trial 开始时间
        waiting_for_end = False  # 是否进入等待模式
        continueRoutine = True
        if Rank == 1:
            A="               優勝賞をもらう\n\n二位にペナルティを与える\n\n三位にペナルティを与える"
        elif Rank ==2:
            A="三位にペナルティを与える"
        else:
            A="他のプレイヤーを\n待っています"
        Default1=0
        Choice_Final = 0
        Pos_dot = (0.17, 0.015)

        if Rank == 0 :
            continueRoutine = False
      Each Frame:
        # 计算当前试次已经运行的时间
        current_time = globalClock.getTime()
        elapsed_time = current_time - trial_start_time
        if Rank == 1:
            # 监听键盘输入
            keys = Choice_resp.getKeys()
            if keys and not waiting_for_end:
                key = keys[0]  # 获取第一个按键
                rt = keys[0].rt  # 记录反应时间
                if key == 'w':
                    Default1 = (Default1+1) % 3
                if key == 's':
                    Default1 = (Default1-1) % 3
                Choice_Final = Default1
            k = -0.2055*Default1*Default1+0.3425*Default1+0.015
            Pos_dot = (0.17, k)


        # 如果 3 秒到了直接终止
        if elapsed_time >= 3:
            continueRoutine = False

        # 进入等待模式，保持 Routine 直到 3 秒
        if waiting_for_end:
            if globalClock.getTime() - trial_start_time >= 3:
                continueRoutine = False  # 结束 routine
      End Routine:
        # 记录数据
        thisExp.addData("ReactionTimes", reaction_times)
        thisExp.addData("Choice_Final", Choice_Final)
        print("本局最终选择是"+str(Choice_Final))
    TextComponent text_4
      letterHeight = 0.06
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $A
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    TextComponent text_5
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every frame] = Pos_dot
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ●
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    KeyboardComponent Choice_resp
      allowedKeys = 'w','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
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  Routine Wait_Punish
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #读取列表
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        Rank = int(Rank_list[Block_stage])
        continueRoutine = True

        if Rank == 0 :
            continueRoutine = False

        if Choice_Final == 0:
            if Rank == 1 or 2:
                continueRoutine = False
        if Choice_Final == 2:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 他のプレイヤーを待っています
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  Routine Punish
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        target_group = "Coin.png"
      Begin Routine:
        #读取列表
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        Rank = int(Rank_list[Block_stage])
        continueRoutine = True

        if Rank == 0 :
            continueRoutine = False


        if Rank == 3:
            continueRoutine = False

        if Rank == 1:
            if Choice_Final == 1:
                continueRoutine = False
            if Choice_Final == 0:
                target_group = "GroupB.png"
            if Choice_Final == 2:
                target_group = "GroupC.png"
        if Rank == 2:
            target_group = "GroupC.png"
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        reaction_times = []  # 记录反应时间
        trial_start_time = globalClock.getTime()  # 记录 trial 开始时间
        waiting_for_end = False  # 是否进入等待模式
        Coin = [0,1,1,2,3]
        Default1=0
        Punish_Final = "k"
        #读取硬币价值
        Coin_list = [Coin_1,Coin_2,Coin_3]
        Broken_list = [Coin_1_broken,Coin_2_broken,Coin_3_broken]
        COIN = Coin_list[Block_stage]
        BROKEN = Broken_list[Block_stage]
        CL=["Black.png",COIN,COIN,"Harmmer.png",BROKEN]
      Each Frame:
        # 计算当前试次已经运行的时间
        current_time = globalClock.getTime()
        elapsed_time = current_time - trial_start_time

        # 监听键盘输入
        keys = Punish_resp.getKeys()
        if keys and not waiting_for_end:
            key = keys[0]  # 获取第一个按键
            rt = keys[0].rt  # 记录反应时间
            if key == 'f':
                Default1 = 1
            if key == 'j':
                Default1 = 0
            Punish_Final = Default1

        if Default1 == 1:
            CLP = COIN
        elif Default1 == 0:
            CLP = BROKEN







        # 如果 3 秒到了直接终止
        if elapsed_time >= 5:
            continueRoutine = False

        # 进入等待模式，保持 Routine 直到 3 秒
        if waiting_for_end:
            if globalClock.getTime() - trial_start_time >= 5:
                continueRoutine = False  # 结束 routine
      End Routine:
        # 记录数据
        thisExp.addData("ReactionTimes", reaction_times)
        thisExp.addData("Punish_Final", Punish_Final)
        print(Punish_Final, Rank)
        #储存惩罚
        if Block_num == 2:
            if Punish_Final == 1:
                Punish_storage = 2
    KeyboardComponent Punish_resp
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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    ImageComponent CL1
      image [set every frame] = $CLP
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent target_cloth
      image [set every repeat] = $target_group
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_9
      letterHeight = 0.06
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = F: 返却          J: 破壊
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  Routine Feedback
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        #读取列表
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        Rank = int(Rank_list[Block_stage])
        if Rank == 0:
            continueRoutine = False
        #读取硬币价值
        Coin_list = [Coin_1,Coin_2,Coin_3]

        COIN = Coin_list[Block_stage]

        Black = "Black.png"
        Tokenn = COIN
        random_k = int(100*globalClock.getTime()) % 2
        syo = ""
        Name = [0,0,0]
        Rw_1 = Tokenn
        Rw_2 = Tokenn
        Punish_execute = 0
        #检查惩罚
        if Punish_storage >= 1 and Rank != 1:
            Punish_execute = 1
            Punish_storage -= 1

        if random_k == 0:
            Rw_3 = Black
        else:
            Rw_3 = Tokenn
        if Rank == 0 :
            continueRoutine = False
        #计算阶段
        if Rank == 1:
            Name = ["あなたは","Aプレイヤー","Cプレイヤー"]
            if Choice_Final == 1:
                print("第一名，赏")
                syo = "*1.2"
                Rw_1 = Tokenn
                Rw_2 = Tokenn
            elif Choice_Final == 0:
                print("第一名，罚2")
                if Punish_Final == 0:
                    Rw_2 = Black
                else:
                    Rw_2 = Tokenn
            elif Choice_Final == 2:
                print("第一名，罚3")
                if Punish_Final == 0:
                    Rw_3 = Black
        if Rank == 2:
            Name = ["Aプレイヤー","あなたは","Cプレイヤー"]
            if Punish_execute == 0:
                if Punish_Final == 0:
                    print("第二名，罚3")
                    Rw_3 = Black
                    syo = "*1.2"
                elif Punish_Final == 1:
                    print("第二名，不罚3")
                    Rw_3 = Tokenn
                    syo = "*1.2"
            if Punish_execute == 1:
                if Punish_Final == 0:
                    Rw_3 = Black
                    Rw_2 = Black
                elif Punish_Final == 1:
                    Rw_3 = Tokenn
                    Rw_2 = Black
        if Rank == 3:
            print("第三名")
            Name = ["Aプレイヤー","Cプレイヤー","あなたは"]
            Rw_3 = Black
            Rw_2 = Tokenn
            syo = "*1.2"
      End Routine:
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        Rank = int(Rank_list[Block_stage])
        #储存惩罚
        if int(Block_num) == 2 and Rank == 2 and Punish_Final == 1:
            Punish_storage +=1
    TextComponent text_6
      letterHeight = 0.06
      pos = (-0.1, 0.152)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Name[0]
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    TextComponent text_7
      letterHeight = 0.06
      pos = (-0.1, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Name[1]
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    TextComponent text_3
      letterHeight = 0.06
      pos = (-0.1, -0.122)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Name[2]
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    ImageComponent Rw_1_image
      image [set every repeat] = $Rw_1
      pos = (0.1, 0.152)
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Rw_2_image
      image [set every repeat] = $Rw_2
      pos = (0.1, 0.015)
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Rw_3_image
      image [set every repeat] = $Rw_3
      pos = (0.1, -0.122)
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_8
      letterHeight = 0.06
      pos = (0.18, 0.152)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $syo
  Routine Rest
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  Routine Rank1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #读取列表
        Rank_list = [Rank_1, Rank_2, Rank_3]
        Block_stage = int(Block_num)-1
        Rank = int(Rank_list[Block_stage])
        if Rank == 0 :
            continueRoutine = False
        #读取硬币价值
        Coin_list = [Coin_1,Coin_2,Coin_3]
        Broken_list = [Coin_1_broken,Coin_2_broken,Coin_3_broken]

        COIN = Coin_list[Block_stage]

        #显示位次
        if Rank == 1:
            Rank_moji = "一位\n\n二位\n\n三位"
        elif Rank == 2:
            Rank_moji = "二位\n\n一位\n\n三位"
        else:
            Rank_moji = "三位\n\n一位\n\n二位"
    TextComponent RankText
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
             　あなたは　　　　　　になりました

        Bプレイヤーは　　　　　　になりました

        Cプレイヤーは　　　　　　になりました
    TextComponent RankText_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $Rank_moji
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    ImageComponent COINVALUE
      image [set every repeat] = $COIN
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine Blank_trail
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    TextComponent Blakn
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Intro
  LoopInitiator Block_3 loopType="TrialHandler"
    conditionsFile = Block.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block_num': 1},
      {'Block_num': 2},
      {'Block_num': 3}]
    LoopInitiator Single_trail loopType="TrialHandler"
      Selected rows = 0:3
      conditionsFile = Exp.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'trail': 1, 'arrow1': 'R.png', 'key1': 'j', 'arrow2': 'L.png', 'key2': 'f', 'arrow3': 'R.png', 'key3': 'j', 'arrow4': 'R.png', 'key4': 'j', 'arrow5': 'L.png', 'key5': 'f', 'arrow_black': 'Black.png', 'Rank_1': 1, 'Rank_2': 1, 'Rank_3': 2, 'Message_1': 0, 'Message_2': 0.0, 'Message_3': 0, 'Coin_1': 'Coin.png', 'Coin_1_broken': 'Broken.png', 'Coin_2': '500.png', 'Coin_2_broken': '500Broken.png', 'Coin_3': '500.png', 'Coin_3_broken': '500Broken.png'},
        {'trail': 2, 'arrow1': 'R.png', 'key1': 'j', 'arrow2': 'R.png', 'key2': 'j', 'arrow3': 'R.png', 'key3': 'j', 'arrow4': 'L.png', 'key4': 'f', 'arrow5': 'L.png', 'key5': 'f', 'arrow_black': 'Black.png', 'Rank_1': 3, 'Rank_2': 3, 'Rank_3': 1, 'Message_1': 0, 'Message_2': 0.0, 'Message_3': 0, 'Coin_1': '100.png', 'Coin_1_broken': '100Broken.png', 'Coin_2': '500.png', 'Coin_2_broken': '500Broken.png', 'Coin_3': '500.png', 'Coin_3_broken': '500Broken.png'},
        {'trail': 3, 'arrow1': 'L.png', 'key1': 'f', 'arrow2': 'L.png', 'key2': 'f', 'arrow3': 'R.png', 'key3': 'j', 'arrow4': 'L.png', 'key4': 'f', 'arrow5': 'R.png', 'key5': 'j', 'arrow_black': 'Black.png', 'Rank_1': 2, 'Rank_2': 2, 'Rank_3': 2, 'Message_1': 0, 'Message_2': 1.0, 'Message_3': 0, 'Coin_1': '100.png', 'Coin_1_broken': '100Broken.png', 'Coin_2': '500.png', 'Coin_2_broken': '500Broken.png', 'Coin_3': '100.png', 'Coin_3_broken': '100Broken.png'},
        {'trail': 4, 'arrow1': 'L.png', 'key1': 'f', 'arrow2': 'R.png', 'key2': 'j', 'arrow3': 'R.png', 'key3': 'j', 'arrow4': 'R.png', 'key4': 'j', 'arrow5': 'L.png', 'key5': 'f', 'arrow_black': 'Black.png', 'Rank_1': 2, 'Rank_2': 1, 'Rank_3': 1, 'Message_1': 0, 'Message_2': 0.0, 'Message_3': 0, 'Coin_1': '500.png', 'Coin_1_broken': '500Broken.png', 'Coin_2': 'Coin.png', 'Coin_2_broken': 'Broken.png', 'Coin_3': '500.png', 'Coin_3_broken': '500Broken.png'}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
      Routine Game_3
      Routine Rank1
      Routine Message_1
      Routine Choice
      Routine Wait_Punish
      Routine Punish
      Routine Feedback
      Routine Blank_trail
    LoopTerminator Single_trail
    Routine Rest
  LoopTerminator Block_3
